CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "hyb")
    Name to assign these images:gene1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
EnhanceOrSuppressFeatures:[module_num:5|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notes:['The transformation helps to increase the real signal and reduce the background']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
    Select the input image:gene1
    Name the output image:EnhancedGene1
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow

RescaleIntensity:[module_num:6|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notes:['This modificiation is used for visualization of the signal in the following steps.']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
    Select the input image:gene1
    Name the output image:Gene1_for_display
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.0625
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
IdentifyPrimaryObjects:[module_num:7|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notes:['That step uses (i) a size criterion for the signals. For the specific dataset (pixel size 0.114um) the typical diameter is set between 3 and 18 pixels.', '(ii) a manual threshold, which is initially set to 0.002 and then increases stepwise 0.001 until 0.01 and 0.002 until 0.022.']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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs_thrs1
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ConvertObjectsToImage:[module_num:8|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notes:['That step creates an image with the recognized 1pixel-size dots.']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
    Select the input objects:IdentifiedBlobs_thrs1
    Name the output image:thrs1
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:thrs1
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:threshold1_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|threshold_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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