CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['To recognize the proper image for analysis, it is necessary to set the "string" at the "Select the rule criteria" filed.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "hyb1_c1")
    Name to assign these images:Nuclei
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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
    Select the input image:Nuclei
    Name the output object:nuclei_objects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ExpandOrShrinkObjects:[module_num:6|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notes:['An 1 pixel black division is created between the identified objects, facilitating better measurement with ImageJ.']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
    Select the input objects:nuclei_objects
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No

ConvertObjectsToImage:[module_num:7|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
    Select the input objects:ShrunkenNuclei
    Name the output image:ShrunkenNucleiOutlines
    Select the color format:Binary (black & white)
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
IdentifySecondaryObjects:[module_num:8|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notes:['18pixels correspond to 2.052 um according to the specific 40x lens']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
    Select the input objects:ShrunkenNuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:Nuclei
    Number of pixels by which to expand the primary objects:18
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
ExpandOrShrinkObjects:[module_num:9|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notes:['An 1 pixel black division is created between the identified objects, facilitating better measurement with ImageJ.']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
    Select the input objects:Cells
    Name the output objects:ShrunkenCells
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No

ConvertObjectsToImage:[module_num:10|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
    Select the input objects:ShrunkenCells
    Name the output image:ShrunkenCellOutlines
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:ShrunkenCellOutlines
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Cell_outlines
    Number of digits:0
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Cell_outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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