CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:216
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|input
    Name of the file:507_s7.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|None
    Process just a range of rows?:No
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    Group images by metadata?:Yes
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    Rescale intensities?:No

ConvertImageToObjects:[module_num:2|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
    Select the input image:Nuclei
    Name the output object:nuclei_objects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ExpandOrShrinkObjects:[module_num:3|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notes:['An 1 pixel black division is created between the identified objects, facilitating better measurement with ImageJ.']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
    Select the input objects:nuclei_objects
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No

ConvertObjectsToImage:[module_num:4|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
    Select the input objects:ShrunkenNuclei
    Name the output image:ShrunkenNucleiOutlines
    Select the color format:Binary (black & white)
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
IdentifySecondaryObjects:[module_num:5|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notes:['18pixels correspond to 2.052 um according to the specific 40x lens']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
    Select the input objects:ShrunkenNuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:Nuclei
    Number of pixels by which to expand the primary objects:18
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
ExpandOrShrinkObjects:[module_num:6|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notes:['An 1 pixel black division is created between the identified objects, facilitating better measurement with ImageJ.']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
    Select the input objects:Cells
    Name the output objects:ShrunkenCells
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No

ConvertObjectsToImage:[module_num:7|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
    Select the input objects:ShrunkenCells
    Name the output image:ShrunkenCellOutlines
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:ShrunkenCellOutlines
    Select method for constructing file names:Sequential numbers
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    Enter single file name:Cell_outlines
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Cell_outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
EnhanceOrSuppressFeatures:[module_num:9|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
    Select the input image:gene1
    Name the output image:EnhancedGene1
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs1
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:11|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
    Select the input object:IdentifiedBlobs1
    Name the output object:ShrunkenBlobs1

ExpandOrShrinkObjects:[module_num:12|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enabled:False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
    Select the input objects:ShrunkenBlobs1
    Name the output objects:BlobsVis1
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
MeasureObjectIntensity:[module_num:13|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
    Hidden:1
    Select an image to measure:gene1
    Select objects to measure:IdentifiedBlobs1

RelateObjects:[module_num:14|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs1
    Name the output object:RelateObjects1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ConvertObjectsToImage:[module_num:15|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
    Select the input objects:ShrunkenBlobs1
    Name the output image:gene1_1pixel
    Select the color format:Binary (black & white)
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
DilateImage:[module_num:16|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
    Select the input image:gene1_1pixel
    Name the output image:gene1_vis
    Structuring element:star,7

ConvertObjectsToImage:[module_num:17|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enabled:False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
    Select the input objects:BlobsVis1
    Name the output image:gene1_vis
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:gene1_1pixel
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene1_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene1_1pixel
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:gene1_vis
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene1_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene1_vis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
EnhanceOrSuppressFeatures:[module_num:20|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
    Select the input image:gene2
    Name the output image:EnhancedGene2
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:21|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
    Select the input image:EnhancedGene2
    Name the primary objects to be identified:IdentifiedBlobs2
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:22|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
    Select the input object:IdentifiedBlobs2
    Name the output object:ShrunkenBlobs2

ExpandOrShrinkObjects:[module_num:23|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enabled:False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
    Select the input objects:ShrunkenBlobs2
    Name the output objects:BlobsVis2
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
MeasureObjectIntensity:[module_num:24|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
    Hidden:1
    Select an image to measure:gene2
    Select objects to measure:IdentifiedBlobs2

RelateObjects:[module_num:25|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs2
    Name the output object:RelateObjects2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ConvertObjectsToImage:[module_num:26|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
    Select the input objects:ShrunkenBlobs2
    Name the output image:gene2_1pixel
    Select the color format:Binary (black & white)
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
DilateImage:[module_num:27|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
    Select the input image:gene2_1pixel
    Name the output image:gene2_vis
    Structuring element:diamond,4

ConvertObjectsToImage:[module_num:28|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enabled:False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
    Select the input objects:BlobsVis2
    Name the output image:gene2_vis
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:gene2_1pixel
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene2_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene2_1pixel
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:gene2_vis
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene2_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene2_vis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
EnhanceOrSuppressFeatures:[module_num:31|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
    Select the input image:gene3
    Name the output image:EnhancedGene3
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:32|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
    Select the input image:EnhancedGene3
    Name the primary objects to be identified:IdentifiedBlobs3
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:33|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
    Select the input object:IdentifiedBlobs3
    Name the output object:ShrunkenBlobs3

ExpandOrShrinkObjects:[module_num:34|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
    Select the input objects:ShrunkenBlobs3
    Name the output objects:BlobsVis3
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
MeasureObjectIntensity:[module_num:35|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
    Hidden:1
    Select an image to measure:gene3
    Select objects to measure:IdentifiedBlobs3

RelateObjects:[module_num:36|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs3
    Name the output object:RelateObjects3
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ConvertObjectsToImage:[module_num:37|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
    Select the input objects:ShrunkenBlobs3
    Name the output image:gene3_1pixel
    Select the color format:Binary (black & white)
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
DilateImage:[module_num:38|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enabled:False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
    Select the input image:gene3_1pixel
    Name the output image:gene3_vis
    Structuring element:square,1

ConvertObjectsToImage:[module_num:39|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
    Select the input objects:BlobsVis3
    Name the output image:gene3_vis
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:40|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
    Select the type of image to save:Image
    Select the image to save:gene3_1pixel
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene3_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene3_1pixel
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:41|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
    Select the type of image to save:Image
    Select the image to save:gene3_vis
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene3_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene3_vis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
EnhanceOrSuppressFeatures:[module_num:42|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
    Select the input image:gene4
    Name the output image:EnhancedGene4
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:43|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
    Select the input image:EnhancedGene4
    Name the primary objects to be identified:IdentifiedBlobs4
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:44|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
    Select the input object:IdentifiedBlobs4
    Name the output object:ShrunkenBlobs4

ExpandOrShrinkObjects:[module_num:45|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enabled:False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
    Select the input objects:IdentifiedBlobs4
    Name the output objects:BlobsVis4
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
MeasureObjectIntensity:[module_num:46|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
    Hidden:1
    Select an image to measure:gene4
    Select objects to measure:IdentifiedBlobs4

RelateObjects:[module_num:47|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs4
    Name the output object:RelateObjects4
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ConvertObjectsToImage:[module_num:48|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
    Select the input objects:ShrunkenBlobs4
    Name the output image:gene4_1pixel
    Select the color format:Binary (black & white)
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
DilateImage:[module_num:49|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
    Select the input image:gene4_1pixel
    Name the output image:gene4_vis
    Structuring element:star,10

ConvertObjectsToImage:[module_num:50|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enabled:False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
    Select the input objects:BlobsVis4
    Name the output image:gene4_vis
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:51|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
    Select the type of image to save:Image
    Select the image to save:gene4_1pixel
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene4_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene4_1pixel
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:52|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
    Select the type of image to save:Image
    Select the image to save:gene4_vis
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene4_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene4_vis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
EnhanceOrSuppressFeatures:[module_num:53|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
    Select the input image:gene5
    Name the output image:EnhancedGene5
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:54|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
    Select the input image:EnhancedGene5
    Name the primary objects to be identified:IdentifiedBlobs5
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:55|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
    Select the input object:IdentifiedBlobs5
    Name the output object:ShrunkenBlobs5

ExpandOrShrinkObjects:[module_num:56|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enabled:False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
    Select the input objects:ShrunkenBlobs5
    Name the output objects:BlobsVis5
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
MeasureObjectIntensity:[module_num:57|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
    Hidden:1
    Select an image to measure:gene5
    Select objects to measure:IdentifiedBlobs5

RelateObjects:[module_num:58|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs5
    Name the output object:RelateObjects5
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ConvertObjectsToImage:[module_num:59|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
    Select the input objects:ShrunkenBlobs5
    Name the output image:gene5_1pixel
    Select the color format:Binary (black & white)
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
DilateImage:[module_num:60|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
    Select the input image:gene5_1pixel
    Name the output image:gene5_vis
    Structuring element:star,7

ConvertObjectsToImage:[module_num:61|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enabled:False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
    Select the input objects:BlobsVis5
    Name the output image:gene5_vis
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:62|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
    Select the type of image to save:Image
    Select the image to save:gene5_1pixel
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene5_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene5_1pixel
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:63|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
    Select the type of image to save:Image
    Select the image to save:gene5_vis
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene5_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene5_vis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
EnhanceOrSuppressFeatures:[module_num:64|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
    Select the input image:gene6
    Name the output image:EnhancedGene6
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:65|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
    Select the input image:EnhancedGene6
    Name the primary objects to be identified:IdentifiedBlobs6
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:66|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
    Select the input object:IdentifiedBlobs6
    Name the output object:ShrunkenBlobs6

ExpandOrShrinkObjects:[module_num:67|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enabled:False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
    Select the input objects:ShrunkenBlobs6
    Name the output objects:BlobsVis6
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
MeasureObjectIntensity:[module_num:68|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
    Hidden:1
    Select an image to measure:gene6
    Select objects to measure:IdentifiedBlobs6

RelateObjects:[module_num:69|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs6
    Name the output object:RelateObjects6
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ConvertObjectsToImage:[module_num:70|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
    Select the input objects:ShrunkenBlobs6
    Name the output image:gene6_1pixel
    Select the color format:Binary (black & white)
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
DilateImage:[module_num:71|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
    Select the input image:gene6_1pixel
    Name the output image:gene6_vis
    Structuring element:star,7

ConvertObjectsToImage:[module_num:72|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enabled:False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
    Select the input objects:BlobsVis6
    Name the output image:gene6_vis
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:73|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
    Select the type of image to save:Image
    Select the image to save:gene6_1pixel
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene6_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene6_1pixel
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:74|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
    Select the type of image to save:Image
    Select the image to save:gene6_vis
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene6_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene6_vis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
EnhanceOrSuppressFeatures:[module_num:75|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
    Select the input image:gene7
    Name the output image:EnhancedGene7
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:76|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
    Select the input image:EnhancedGene7
    Name the primary objects to be identified:IdentifiedBlobs7
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:77|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
    Select the input object:IdentifiedBlobs7
    Name the output object:ShrunkenBlobs7

ExpandOrShrinkObjects:[module_num:78|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enabled:False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
    Select the input objects:ShrunkenBlobs7
    Name the output objects:BlobsVis7
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
MeasureObjectIntensity:[module_num:79|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
    Hidden:1
    Select an image to measure:gene7
    Select objects to measure:IdentifiedBlobs7

RelateObjects:[module_num:80|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs7
    Name the output object:RelateObjects7
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ConvertObjectsToImage:[module_num:81|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
    Select the input objects:ShrunkenBlobs7
    Name the output image:gene7_1pixel
    Select the color format:Binary (black & white)
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
DilateImage:[module_num:82|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
    Select the input image:gene7_1pixel
    Name the output image:gene7_vis
    Structuring element:square,4

ConvertObjectsToImage:[module_num:83|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enabled:False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
    Select the input objects:BlobsVis7
    Name the output image:gene7_vis
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:84|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
    Select the type of image to save:Image
    Select the image to save:gene7_1pixel
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene7_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene7_1pixel
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:85|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
    Select the type of image to save:Image
    Select the image to save:gene7_vis
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene7_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene7_vis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
EnhanceOrSuppressFeatures:[module_num:86|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
    Select the input image:gene8
    Name the output image:EnhancedGene8
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:87|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
    Select the input image:EnhancedGene8
    Name the primary objects to be identified:IdentifiedBlobs8
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:88|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
    Select the input object:IdentifiedBlobs8
    Name the output object:ShrunkenBlobs8

ExpandOrShrinkObjects:[module_num:89|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
    Select the input objects:ShrunkenBlobs8
    Name the output objects:BlobsVis8
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
MeasureObjectIntensity:[module_num:90|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
    Hidden:1
    Select an image to measure:gene8
    Select objects to measure:IdentifiedBlobs8

RelateObjects:[module_num:91|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs8
    Name the output object:RelateObjects8
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ConvertObjectsToImage:[module_num:92|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
    Select the input objects:ShrunkenBlobs8
    Name the output image:gene8_1pixel
    Select the color format:Binary (black & white)
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
DilateImage:[module_num:93|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enabled:False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
    Select the input image:gene8_1pixel
    Name the output image:gene8_vis
    Structuring element:square,1

ConvertObjectsToImage:[module_num:94|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
    Select the input objects:BlobsVis8
    Name the output image:gene8_vis
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:95|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
    Select the type of image to save:Image
    Select the image to save:gene8_1pixel
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene8_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene8_1pixel
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:96|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
    Select the type of image to save:Image
    Select the image to save:gene8_vis
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene8_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene8_vis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
EnhanceOrSuppressFeatures:[module_num:97|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
    Select the input image:gene9
    Name the output image:EnhancedGene9
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:98|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
    Select the input image:EnhancedGene9
    Name the primary objects to be identified:IdentifiedBlobs9
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:99|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
    Select the input object:IdentifiedBlobs9
    Name the output object:ShrunkenBlobs9

ExpandOrShrinkObjects:[module_num:100|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enabled:False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
    Select the input objects:ShrunkenBlobs9
    Name the output objects:BlobsVis9
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
MeasureObjectIntensity:[module_num:101|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
    Hidden:1
    Select an image to measure:gene9
    Select objects to measure:IdentifiedBlobs9

RelateObjects:[module_num:102|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs9
    Name the output object:RelateObjects9
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ConvertObjectsToImage:[module_num:103|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
    Select the input objects:ShrunkenBlobs9
    Name the output image:gene9_1pixel
    Select the color format:Binary (black & white)
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
DilateImage:[module_num:104|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
    Select the input image:gene9_1pixel
    Name the output image:gene9_vis
    Structuring element:square,4

ConvertObjectsToImage:[module_num:105|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enabled:False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
    Select the input objects:BlobsVis9
    Name the output image:gene9_vis
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:106|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
    Select the type of image to save:Image
    Select the image to save:gene9_1pixel
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene9_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene9_1pixel
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:107|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
    Select the type of image to save:Image
    Select the image to save:gene9_vis
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene9_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene9_vis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
EnhanceOrSuppressFeatures:[module_num:108|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
    Select the input image:gene10
    Name the output image:EnhancedGene10
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:109|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
    Select the input image:EnhancedGene10
    Name the primary objects to be identified:IdentifiedBlobs10
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:110|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
    Select the input object:IdentifiedBlobs10
    Name the output object:ShrunkenBlobs10

ExpandOrShrinkObjects:[module_num:111|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enabled:False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
    Select the input objects:IdentifiedBlobs10
    Name the output objects:BlobsVis10
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
MeasureObjectIntensity:[module_num:112|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
    Hidden:1
    Select an image to measure:gene10
    Select objects to measure:IdentifiedBlobs10

RelateObjects:[module_num:113|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs10
    Name the output object:RelateObjects10
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ConvertObjectsToImage:[module_num:114|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
    Select the input objects:ShrunkenBlobs10
    Name the output image:gene10_1pixel
    Select the color format:Binary (black & white)
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
DilateImage:[module_num:115|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
    Select the input image:gene10_1pixel
    Name the output image:gene10_vis
    Structuring element:square,4

ConvertObjectsToImage:[module_num:116|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enabled:False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
    Select the input objects:BlobsVis10
    Name the output image:gene10_vis
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:117|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
    Select the type of image to save:Image
    Select the image to save:gene10_1pixel
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene10_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene10_1pixel
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:118|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
    Select the type of image to save:Image
    Select the image to save:gene10_vis
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene10_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene10_vis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
EnhanceOrSuppressFeatures:[module_num:119|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
    Select the input image:gene11
    Name the output image:EnhancedGene11
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:120|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
    Select the input image:EnhancedGene11
    Name the primary objects to be identified:IdentifiedBlobs11
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:121|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
    Select the input object:IdentifiedBlobs11
    Name the output object:ShrunkenBlobs11

ExpandOrShrinkObjects:[module_num:122|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enabled:False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
    Select the input objects:ShrunkenBlobs11
    Name the output objects:BlobsVis11
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
MeasureObjectIntensity:[module_num:123|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
    Hidden:1
    Select an image to measure:gene11
    Select objects to measure:IdentifiedBlobs11

RelateObjects:[module_num:124|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs11
    Name the output object:RelateObjects11
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ConvertObjectsToImage:[module_num:125|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
    Select the input objects:ShrunkenBlobs11
    Name the output image:gene11_1pixel
    Select the color format:Binary (black & white)
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
DilateImage:[module_num:126|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
    Select the input image:gene11_1pixel
    Name the output image:gene11_vis
    Structuring element:square,4

ConvertObjectsToImage:[module_num:127|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enabled:False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
    Select the input objects:BlobsVis11
    Name the output image:gene11_vis
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:128|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
    Select the type of image to save:Image
    Select the image to save:gene11_1pixel
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene11_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene11_1pixel
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:129|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
    Select the type of image to save:Image
    Select the image to save:gene11_vis
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene11_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene11_vis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
EnhanceOrSuppressFeatures:[module_num:130|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
    Select the input image:gene12
    Name the output image:EnhancedGene12
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:131|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
    Select the input image:EnhancedGene12
    Name the primary objects to be identified:IdentifiedBlobs12
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:132|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
    Select the input object:IdentifiedBlobs12
    Name the output object:ShrunkenBlobs12

ExpandOrShrinkObjects:[module_num:133|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enabled:False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
    Select the input objects:ShrunkenBlobs12
    Name the output objects:BlobsVis12
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
MeasureObjectIntensity:[module_num:134|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
    Hidden:1
    Select an image to measure:gene12
    Select objects to measure:IdentifiedBlobs12

RelateObjects:[module_num:135|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs12
    Name the output object:RelateObjects12
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ConvertObjectsToImage:[module_num:136|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
    Select the input objects:ShrunkenBlobs12
    Name the output image:gene12_1pixel
    Select the color format:Binary (black & white)
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
DilateImage:[module_num:137|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
    Select the input image:gene12_1pixel
    Name the output image:gene12_vis
    Structuring element:diamond,4

ConvertObjectsToImage:[module_num:138|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enabled:False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
    Select the input objects:BlobsVis12
    Name the output image:gene12_vis
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:139|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
    Select the type of image to save:Image
    Select the image to save:gene12_1pixel
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene12_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene12_1pixel
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:140|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
    Select the type of image to save:Image
    Select the image to save:gene12_vis
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene12_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene12_vis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
EnhanceOrSuppressFeatures:[module_num:141|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
    Select the input image:gene13
    Name the output image:EnhancedGene13
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:142|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
    Select the input image:EnhancedGene13
    Name the primary objects to be identified:IdentifiedBlobs13
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:143|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
    Select the input object:IdentifiedBlobs13
    Name the output object:ShrunkenBlobs13

ExpandOrShrinkObjects:[module_num:144|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
    Select the input objects:ShrunkenBlobs13
    Name the output objects:BlobsVis13
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
MeasureObjectIntensity:[module_num:145|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
    Hidden:1
    Select an image to measure:gene13
    Select objects to measure:IdentifiedBlobs13

RelateObjects:[module_num:146|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs13
    Name the output object:RelateObjects13
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ConvertObjectsToImage:[module_num:147|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
    Select the input objects:ShrunkenBlobs13
    Name the output image:gene13_1pixel
    Select the color format:Binary (black & white)
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
DilateImage:[module_num:148|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enabled:False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
    Select the input image:gene13_1pixel
    Name the output image:gene13_vis
    Structuring element:square,1

ConvertObjectsToImage:[module_num:149|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
    Select the input objects:BlobsVis13
    Name the output image:gene13_vis
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:150|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
    Select the type of image to save:Image
    Select the image to save:gene13_1pixel
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene13_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene13_1pixel
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:151|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
    Select the type of image to save:Image
    Select the image to save:gene13_vis
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene13_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene13_vis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
EnhanceOrSuppressFeatures:[module_num:152|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
    Select the input image:gene14
    Name the output image:EnhancedGene14
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:153|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
    Select the input image:EnhancedGene14
    Name the primary objects to be identified:IdentifiedBlobs14
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:154|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
    Select the input object:IdentifiedBlobs14
    Name the output object:ShrunkenBlobs14

ExpandOrShrinkObjects:[module_num:155|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
    Select the input objects:ShrunkenBlobs14
    Name the output objects:BlobsVis14
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
MeasureObjectIntensity:[module_num:156|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
    Hidden:1
    Select an image to measure:gene14
    Select objects to measure:IdentifiedBlobs14

RelateObjects:[module_num:157|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs14
    Name the output object:RelateObjects14
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ConvertObjectsToImage:[module_num:158|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
    Select the input objects:ShrunkenBlobs14
    Name the output image:gene14_1pixel
    Select the color format:Binary (black & white)
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
DilateImage:[module_num:159|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enabled:False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
    Select the input image:gene14_1pixel
    Name the output image:gene14_vis
    Structuring element:square,1

ConvertObjectsToImage:[module_num:160|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
    Select the input objects:BlobsVis14
    Name the output image:gene14_vis
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:161|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
    Select the type of image to save:Image
    Select the image to save:gene14_1pixel
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene14_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene14_1pixel
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:162|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
    Select the type of image to save:Image
    Select the image to save:gene14_vis
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene14_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene14_vis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
EnhanceOrSuppressFeatures:[module_num:163|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
    Select the input image:gene15
    Name the output image:EnhancedGene15
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:164|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
    Select the input image:EnhancedGene15
    Name the primary objects to be identified:IdentifiedBlobs15
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:165|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
    Select the input object:IdentifiedBlobs15
    Name the output object:ShrunkenBlobs15

ExpandOrShrinkObjects:[module_num:166|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
    Select the input objects:ShrunkenBlobs15
    Name the output objects:BlobsVis15
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
MeasureObjectIntensity:[module_num:167|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
    Hidden:1
    Select an image to measure:gene15
    Select objects to measure:IdentifiedBlobs15

RelateObjects:[module_num:168|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs15
    Name the output object:RelateObjects15
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ConvertObjectsToImage:[module_num:169|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
    Select the input objects:ShrunkenBlobs15
    Name the output image:gene15_1pixel
    Select the color format:Binary (black & white)
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
DilateImage:[module_num:170|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enabled:False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
    Select the input image:gene15_1pixel
    Name the output image:gene15_vis
    Structuring element:square,1

ConvertObjectsToImage:[module_num:171|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
    Select the input objects:BlobsVis15
    Name the output image:gene15_vis
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:172|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
    Select the type of image to save:Image
    Select the image to save:gene15_1pixel
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene15_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene15_1pixel
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:173|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
    Select the type of image to save:Image
    Select the image to save:gene15_vis
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene15_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene15_vis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
EnhanceOrSuppressFeatures:[module_num:174|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
    Select the input image:gene16
    Name the output image:EnhancedGene16
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:175|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
    Select the input image:EnhancedGene16
    Name the primary objects to be identified:IdentifiedBlobs16
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:176|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
    Select the input object:IdentifiedBlobs16
    Name the output object:ShrunkenBlobs16

ExpandOrShrinkObjects:[module_num:177|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enabled:False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
    Select the input objects:IdentifiedBlobs16
    Name the output objects:BlobsVis16
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
MeasureObjectIntensity:[module_num:178|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
    Hidden:1
    Select an image to measure:gene16
    Select objects to measure:IdentifiedBlobs16

RelateObjects:[module_num:179|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs16
    Name the output object:RelateObjects16
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ConvertObjectsToImage:[module_num:180|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
    Select the input objects:ShrunkenBlobs16
    Name the output image:gene16_1pixel
    Select the color format:Binary (black & white)
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
DilateImage:[module_num:181|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
    Select the input image:gene16_1pixel
    Name the output image:gene16_vis
    Structuring element:star,7

ConvertObjectsToImage:[module_num:182|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enabled:False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
    Select the input objects:BlobsVis16
    Name the output image:gene16_vis
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:183|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
    Select the type of image to save:Image
    Select the image to save:gene16_1pixel
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene16_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene16_1pixel
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:184|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
    Select the type of image to save:Image
    Select the image to save:gene16_vis
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene16_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene16_vis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
EnhanceOrSuppressFeatures:[module_num:185|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
    Select the input image:gene17
    Name the output image:EnhancedGene17
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:186|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
    Select the input image:EnhancedGene17
    Name the primary objects to be identified:IdentifiedBlobs17
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:187|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
    Select the input object:IdentifiedBlobs17
    Name the output object:ShrunkenBlobs17

ExpandOrShrinkObjects:[module_num:188|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enabled:False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
    Select the input objects:ShrunkenBlobs17
    Name the output objects:BlobsVis17
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
MeasureObjectIntensity:[module_num:189|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
    Hidden:1
    Select an image to measure:gene17
    Select objects to measure:IdentifiedBlobs17

RelateObjects:[module_num:190|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs17
    Name the output object:RelateObjects17
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ConvertObjectsToImage:[module_num:191|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
    Select the input objects:ShrunkenBlobs17
    Name the output image:gene17_1pixel
    Select the color format:Binary (black & white)
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
DilateImage:[module_num:192|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
    Select the input image:gene17_1pixel
    Name the output image:gene17_vis
    Structuring element:square,4

ConvertObjectsToImage:[module_num:193|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enabled:False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
    Select the input objects:BlobsVis17
    Name the output image:gene17_vis
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:194|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
    Select the type of image to save:Image
    Select the image to save:gene17_1pixel
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene17_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene17_1pixel
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:195|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
    Select the type of image to save:Image
    Select the image to save:gene17_vis
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene17_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene17_vis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
EnhanceOrSuppressFeatures:[module_num:196|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
    Select the input image:gene18
    Name the output image:EnhancedGene18
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:197|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
    Select the input image:EnhancedGene18
    Name the primary objects to be identified:IdentifiedBlobs18
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:198|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
    Select the input object:IdentifiedBlobs18
    Name the output object:ShrunkenBlobs18

ExpandOrShrinkObjects:[module_num:199|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
    Select the input objects:ShrunkenBlobs18
    Name the output objects:BlobsVis18
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
MeasureObjectIntensity:[module_num:200|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
    Hidden:1
    Select an image to measure:gene18
    Select objects to measure:IdentifiedBlobs18

RelateObjects:[module_num:201|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs18
    Name the output object:RelateObjects18
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ConvertObjectsToImage:[module_num:202|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
    Select the input objects:ShrunkenBlobs18
    Name the output image:gene18_1pixel
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:203|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
    Select the input objects:IdentifiedBlobs18
    Name the output image:gene18_vis
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:204|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
    Select the type of image to save:Image
    Select the image to save:gene18_1pixel
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene18_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene18_1pixel
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:205|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
    Select the type of image to save:Image
    Select the image to save:gene18_vis
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene18_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene18_vis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
EnhanceOrSuppressFeatures:[module_num:206|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
    Select the input image:gene19
    Name the output image:EnhancedGene19
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:207|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
    Select the input image:EnhancedGene19
    Name the primary objects to be identified:IdentifiedBlobs19
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:208|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
    Select the input object:IdentifiedBlobs19
    Name the output object:ShrunkenBlobs19

ExpandOrShrinkObjects:[module_num:209|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
    Select the input objects:ShrunkenBlobs19
    Name the output objects:BlobsVis19
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
MeasureObjectIntensity:[module_num:210|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
    Hidden:1
    Select an image to measure:gene19
    Select objects to measure:IdentifiedBlobs19

RelateObjects:[module_num:211|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs19
    Name the output object:RelateObjects19
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ConvertObjectsToImage:[module_num:212|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
    Select the input objects:ShrunkenBlobs19
    Name the output image:gene19_1pixel
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:213|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
    Select the input objects:IdentifiedBlobs19
    Name the output image:gene19_vis
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:214|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
    Select the type of image to save:Image
    Select the image to save:gene19_1pixel
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene19_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene19_1pixel
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:215|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
    Select the type of image to save:Image
    Select the image to save:gene19_vis
    Select method for constructing file names:Sequential numbers
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    Enter single file name:gene19_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gene19_vis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:216|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:IdentifiedBlobs9|Location_MaxIntensity_Y_gene9,IdentifiedBlobs9|Location_MaxIntensity_X_gene9,IdentifiedBlobs9|Location_MaxIntensity_Z_gene9,IdentifiedBlobs9|Location_CenterMassIntensity_Y_gene9,IdentifiedBlobs9|Location_CenterMassIntensity_X_gene9,IdentifiedBlobs9|Location_CenterMassIntensity_Z_gene9,IdentifiedBlobs9|Location_Center_Y,IdentifiedBlobs9|Location_Center_X,IdentifiedBlobs9|Location_Center_Z,IdentifiedBlobs8|Location_MaxIntensity_Y_gene8,IdentifiedBlobs8|Location_MaxIntensity_X_gene8,IdentifiedBlobs8|Location_MaxIntensity_Z_gene8,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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