CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:117
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Drag and drop the image for analysis, below. Its name should contain the string "hyb", otherwise it will not be recognized.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['It is not used.']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['It recognizes the image for analysis.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "hyb")
    Name to assign these images:gene1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['It is not used.']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
    Do you want to group your images?:No
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
EnhanceOrSuppressFeatures:[module_num:5|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notes:['The transformation helps to increase the real signal and reduce the background.']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
    Select the input image:gene1
    Name the output image:EnhancedGene1
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow

RescaleIntensity:[module_num:6|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notes:['This modificiation is used for visualization of the signal in the following steps.']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
    Select the input image:gene1
    Name the output image:Gene1_for_display
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.03125
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
IdentifyPrimaryObjects:[module_num:7|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notes:['That step uses (i) a size criterion for the signals. For the specific dataset (pixel size 0.114um) the typical diameter is set between 3 and 18 pixels.', '(ii) a manual threshold, which is initially set to 0.002 and then increases stepwise 0.001 until 0.01 and 0.002 until 0.022.']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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs_thrs1
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.002
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
ShrinkToObjectCenters:[module_num:8|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notes:['The identified signals are shrungen to 1pixel size.']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
    Select the input object:IdentifiedBlobs_thrs1
    Name the output object:ShrunkenBlobs1

ConvertObjectsToImage:[module_num:9|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notes:['That step creates an image with the recognized 1pixel-size dots.']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
    Select the input objects:ShrunkenBlobs1
    Name the output image:thrs1
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:10|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
    Select a color scheme:RGB
    Select the image to be colored red:Gene1_for_display
    Select the image to be colored green:thrs1
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    Name the output image:threshold1
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:threshold1
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:threshold1_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|threshold_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs_thrs2
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.003
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
ShrinkToObjectCenters:[module_num:13|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
    Select the input object:IdentifiedBlobs_thrs2
    Name the output object:ShrunkenBlobs2

ConvertObjectsToImage:[module_num:14|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
    Select the input objects:ShrunkenBlobs2
    Name the output image:thrs2
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:15|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
    Select a color scheme:RGB
    Select the image to be colored red:Gene1_for_display
    Select the image to be colored green:thrs2
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    Name the output image:threshold2
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:threshold2
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:threshold2_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|threshold_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:17|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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs_thrs3
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.004
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
ShrinkToObjectCenters:[module_num:18|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
    Select the input object:IdentifiedBlobs_thrs3
    Name the output object:ShrunkenBlobs3

ConvertObjectsToImage:[module_num:19|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
    Select the input objects:ShrunkenBlobs3
    Name the output image:thrs3
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:20|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
    Select a color scheme:RGB
    Select the image to be colored red:Gene1_for_display
    Select the image to be colored green:thrs3
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    Name the output image:threshold3
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:threshold3
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:threshold3_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|threshold_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:22|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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs_thrs4
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.005
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
ShrinkToObjectCenters:[module_num:23|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
    Select the input object:IdentifiedBlobs_thrs4
    Name the output object:ShrunkenBlobs4

ConvertObjectsToImage:[module_num:24|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
    Select the input objects:ShrunkenBlobs4
    Name the output image:thrs4
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:25|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
    Select a color scheme:RGB
    Select the image to be colored red:Gene1_for_display
    Select the image to be colored green:thrs4
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    Name the output image:threshold4
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:threshold4
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:threshold4_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|threshold_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:27|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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs_thrs5
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.006
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
ShrinkToObjectCenters:[module_num:28|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
    Select the input object:IdentifiedBlobs_thrs5
    Name the output object:ShrunkenBlobs5

ConvertObjectsToImage:[module_num:29|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
    Select the input objects:ShrunkenBlobs5
    Name the output image:thrs5
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:30|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
    Select a color scheme:RGB
    Select the image to be colored red:Gene1_for_display
    Select the image to be colored green:thrs5
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    Name the output image:threshold5
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:threshold5
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:threshold5_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|threshold_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:32|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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs_thrs6
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.007
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
ShrinkToObjectCenters:[module_num:33|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
    Select the input object:IdentifiedBlobs_thrs6
    Name the output object:ShrunkenBlobs6

ConvertObjectsToImage:[module_num:34|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
    Select the input objects:ShrunkenBlobs6
    Name the output image:thrs6
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:35|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
    Select a color scheme:RGB
    Select the image to be colored red:Gene1_for_display
    Select the image to be colored green:thrs6
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    Name the output image:threshold6
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:36|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
    Select the type of image to save:Image
    Select the image to save:threshold6
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:threshold6_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|threshold_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:37|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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs_thrs7
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.008
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
ShrinkToObjectCenters:[module_num:38|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
    Select the input object:IdentifiedBlobs_thrs7
    Name the output object:ShrunkenBlobs7

ConvertObjectsToImage:[module_num:39|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
    Select the input objects:ShrunkenBlobs7
    Name the output image:thrs7
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:40|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
    Select a color scheme:RGB
    Select the image to be colored red:Gene1_for_display
    Select the image to be colored green:thrs7
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    Name the output image:threshold7
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:41|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
    Select the type of image to save:Image
    Select the image to save:threshold7
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:threshold7_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|threshold_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:42|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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs_thrs8
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.009
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
ShrinkToObjectCenters:[module_num:43|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
    Select the input object:IdentifiedBlobs_thrs8
    Name the output object:ShrunkenBlobs8

ConvertObjectsToImage:[module_num:44|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
    Select the input objects:ShrunkenBlobs8
    Name the output image:thrs8
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:45|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
    Select a color scheme:RGB
    Select the image to be colored red:Gene1_for_display
    Select the image to be colored green:thrs8
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    Name the output image:threshold8
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:46|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
    Select the type of image to save:Image
    Select the image to save:threshold8
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:threshold8_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|threshold_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:47|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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs_thrs9
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.01
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
ShrinkToObjectCenters:[module_num:48|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
    Select the input object:IdentifiedBlobs_thrs9
    Name the output object:ShrunkenBlobs9

ConvertObjectsToImage:[module_num:49|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
    Select the input objects:ShrunkenBlobs9
    Name the output image:thrs9
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:50|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
    Select a color scheme:RGB
    Select the image to be colored red:Gene1_for_display
    Select the image to be colored green:thrs9
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    Name the output image:threshold9
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:51|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
    Select the type of image to save:Image
    Select the image to save:threshold9
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:threshold9_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|threshold_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:52|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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs_thrs10
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.011
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
ShrinkToObjectCenters:[module_num:53|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
    Select the input object:IdentifiedBlobs_thrs10
    Name the output object:ShrunkenBlobs10

ConvertObjectsToImage:[module_num:54|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
    Select the input objects:ShrunkenBlobs10
    Name the output image:thrs10
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:55|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
    Select a color scheme:RGB
    Select the image to be colored red:Gene1_for_display
    Select the image to be colored green:thrs10
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    Name the output image:threshold10
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:56|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
    Select the type of image to save:Image
    Select the image to save:threshold10
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:threshold10_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|threshold_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:57|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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs_thrs11
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.012
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
ShrinkToObjectCenters:[module_num:58|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
    Select the input object:IdentifiedBlobs_thrs11
    Name the output object:ShrunkenBlobs11

ConvertObjectsToImage:[module_num:59|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
    Select the input objects:ShrunkenBlobs11
    Name the output image:thrs11
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:60|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
    Select a color scheme:RGB
    Select the image to be colored red:Gene1_for_display
    Select the image to be colored green:thrs11
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    Name the output image:threshold11
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:61|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
    Select the type of image to save:Image
    Select the image to save:threshold11
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:threshold11_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|threshold_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:62|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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs_thrs12
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.013
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
ShrinkToObjectCenters:[module_num:63|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
    Select the input object:IdentifiedBlobs_thrs12
    Name the output object:ShrunkenBlobs12

ConvertObjectsToImage:[module_num:64|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
    Select the input objects:ShrunkenBlobs12
    Name the output image:thrs12
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:65|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
    Select a color scheme:RGB
    Select the image to be colored red:Gene1_for_display
    Select the image to be colored green:thrs12
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    Name the output image:threshold12
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:66|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
    Select the type of image to save:Image
    Select the image to save:threshold12
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:threshold12_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|threshold_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:67|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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs_thrs13
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.014
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
ShrinkToObjectCenters:[module_num:68|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
    Select the input object:IdentifiedBlobs_thrs13
    Name the output object:ShrunkenBlobs13

ConvertObjectsToImage:[module_num:69|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
    Select the input objects:ShrunkenBlobs13
    Name the output image:thrs13
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:70|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
    Select a color scheme:RGB
    Select the image to be colored red:Gene1_for_display
    Select the image to be colored green:thrs13
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    Name the output image:threshold13
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:71|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
    Select the type of image to save:Image
    Select the image to save:threshold13
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:threshold13_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|threshold_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:72|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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs_thrs14
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.016
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
ShrinkToObjectCenters:[module_num:73|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
    Select the input object:IdentifiedBlobs_thrs14
    Name the output object:ShrunkenBlobs14

ConvertObjectsToImage:[module_num:74|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
    Select the input objects:ShrunkenBlobs14
    Name the output image:thrs14
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:75|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
    Select a color scheme:RGB
    Select the image to be colored red:Gene1_for_display
    Select the image to be colored green:thrs14
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    Name the output image:threshold14
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:76|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
    Select the type of image to save:Image
    Select the image to save:threshold14
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:threshold14_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|threshold_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:77|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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs_thrs15
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.018
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
ShrinkToObjectCenters:[module_num:78|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
    Select the input object:IdentifiedBlobs_thrs15
    Name the output object:ShrunkenBlobs15

ConvertObjectsToImage:[module_num:79|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
    Select the input objects:ShrunkenBlobs15
    Name the output image:thrs15
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:80|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
    Select a color scheme:RGB
    Select the image to be colored red:Gene1_for_display
    Select the image to be colored green:thrs15
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    Name the output image:threshold15
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:81|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
    Select the type of image to save:Image
    Select the image to save:threshold15
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:threshold15_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|threshold_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:82|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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs_thrs16
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.02
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
ShrinkToObjectCenters:[module_num:83|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
    Select the input object:IdentifiedBlobs_thrs16
    Name the output object:ShrunkenBlobs16

ConvertObjectsToImage:[module_num:84|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
    Select the input objects:ShrunkenBlobs16
    Name the output image:thrs16
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:85|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
    Select a color scheme:RGB
    Select the image to be colored red:Gene1_for_display
    Select the image to be colored green:thrs16
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    Name the output image:threshold16
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:86|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
    Select the type of image to save:Image
    Select the image to save:threshold16
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:threshold16_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|threshold_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:87|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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs_thrs17
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.022
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
ShrinkToObjectCenters:[module_num:88|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
    Select the input object:IdentifiedBlobs_thrs17
    Name the output object:ShrunkenBlobs17

ConvertObjectsToImage:[module_num:89|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
    Select the input objects:ShrunkenBlobs17
    Name the output image:thrs17
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:90|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
    Select a color scheme:RGB
    Select the image to be colored red:Gene1_for_display
    Select the image to be colored green:thrs17
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    Name the output image:threshold17
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:91|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
    Select the type of image to save:Image
    Select the image to save:threshold17
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:threshold17_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|threshold_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:92|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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs_thrs18
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.024
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
ShrinkToObjectCenters:[module_num:93|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
    Select the input object:IdentifiedBlobs_thrs18
    Name the output object:ShrunkenBlobs18

ConvertObjectsToImage:[module_num:94|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
    Select the input objects:ShrunkenBlobs18
    Name the output image:thrs18
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:95|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
    Select a color scheme:RGB
    Select the image to be colored red:Gene1_for_display
    Select the image to be colored green:thrs18
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    Name the output image:threshold18
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:96|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
    Select the type of image to save:Image
    Select the image to save:threshold18
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:threshold18_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|threshold_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:97|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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs_thrs19
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.026
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
ShrinkToObjectCenters:[module_num:98|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
    Select the input object:IdentifiedBlobs_thrs19
    Name the output object:ShrunkenBlobs19

ConvertObjectsToImage:[module_num:99|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
    Select the input objects:ShrunkenBlobs19
    Name the output image:thrs19
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:100|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
    Select a color scheme:RGB
    Select the image to be colored red:Gene1_for_display
    Select the image to be colored green:thrs19
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    Name the output image:threshold19
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:101|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
    Select the type of image to save:Image
    Select the image to save:threshold19
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:threshold19_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|threshold_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:102|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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs_thrs20
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.028
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
ShrinkToObjectCenters:[module_num:103|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
    Select the input object:IdentifiedBlobs_thrs20
    Name the output object:ShrunkenBlobs20

ConvertObjectsToImage:[module_num:104|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
    Select the input objects:ShrunkenBlobs19
    Name the output image:thrs20
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:105|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
    Select a color scheme:RGB
    Select the image to be colored red:Gene1_for_display
    Select the image to be colored green:thrs20
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    Name the output image:threshold20
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:106|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
    Select the type of image to save:Image
    Select the image to save:threshold20
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:threshold20_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|threshold_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:107|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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs_thrs21
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.03
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
ShrinkToObjectCenters:[module_num:108|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
    Select the input object:IdentifiedBlobs_thrs21
    Name the output object:ShrunkenBlobs21

ConvertObjectsToImage:[module_num:109|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
    Select the input objects:ShrunkenBlobs21
    Name the output image:thrs21
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:110|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
    Select a color scheme:RGB
    Select the image to be colored red:Gene1_for_display
    Select the image to be colored green:thrs21
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    Name the output image:threshold21
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:111|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
    Select the type of image to save:Image
    Select the image to save:threshold21
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:threshold21_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|threshold_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:112|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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs_thrs22
    Typical diameter of objects, in pixel units (Min,Max):3,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.032
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
ShrinkToObjectCenters:[module_num:113|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
    Select the input object:IdentifiedBlobs_thrs22
    Name the output object:ShrunkenBlobs22

ConvertObjectsToImage:[module_num:114|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
    Select the input objects:ShrunkenBlobs22
    Name the output image:thrs22
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:115|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
    Select a color scheme:RGB
    Select the image to be colored red:Gene1_for_display
    Select the image to be colored green:thrs22
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    Name the output image:threshold22
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:116|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
    Select the type of image to save:Image
    Select the image to save:threshold22
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:threshold22_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|threshold_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:117|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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